PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = movie_affect-rating_shimmer-trigger
  keyboardBackend = ioHub
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Routines
  Routine start_experiment
    TextComponent startExperiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start
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    KeyboardComponent key_start_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent initialization
      Code Type = Auto->JS
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      Before Experiment:
        # statement for the whole experiment
        import numpy as np
        import serial
        import os
        from datetime import datetime

        # open serial port
        # revise the port here
        # port = serial.Serial('/dev/cu.usbserial-2120', 115200)
        port = None
        # port: the variable defined abolve
        # desc: the description of the event
        def event(port, desc, timestamp):
        #    win.callOnFlip(port.write, str.encode('1'))
            thisExp.addData(desc, timestamp)
      End Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)

        desc = 'experiment_start '
        event(port, desc, timestamp)
        print(desc + str(timestamp))
  Routine fixation
    PolygonComponent fixation_1
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial_movie
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $movie_name
      size = (800,600)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent trial_loader
      Code Type = Auto->JS
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      Begin Experiment:
        currentTrial = 1
        correctTrial = 0
        trialsList = data.importConditions('stim_param.xlsx')
        totalTrial = len(trialsList)
      Begin Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)
        desc = 'movie' + str(currentTrial) + '_start '
        event(port, desc, timestamp)
        print(desc + str(timestamp))
      End Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)
        desc = 'movie' + str(currentTrial) + '_end '
        event(port, desc, timestamp)
        print(desc + str(timestamp))
        currentTrial += 1
  Routine thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your participation!
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    KeyboardComponent key_last
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    TextComponent wait_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent wait_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibration
    CodeComponent trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)
        desc = 'calibration' + str(currentTrial) + '_start '
        event(port, desc, timestamp)
        print(desc + str(timestamp))
    TextComponent smile
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Smile!
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    TextComponent neutral
      letterHeight = 0.05
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 5.0
      text = Relax your face
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    TextComponent frown
      letterHeight = 0.05
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 5.0
      text = Frown!
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    TextComponent neutral_2
      letterHeight = 0.05
      startVal [time (s)] = 15.0
      stopVal [duration (s)] = 5.0
      text = Relax your face
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    TextComponent relax
      letterHeight = 0.05
      startVal [time (s)] = 20.0
      stopVal [duration (s)] = 60.0
      text = Close your eyes and relax
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Flow
  Routine start_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_param.xlsx
    loopType = random
    nReps = 1
    random seed = 20230225
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    conditions:
      [{'movie_name': 'stimuli/duck_video.mp4'},
      {'movie_name': 'stimuli/Jester.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_01.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_02.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_03.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_04.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_05.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_06.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_07.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_08.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_09.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_10.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_11.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_12.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_13.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_14.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_15.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_16.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_17.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_18.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_19.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_20.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_21.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_22.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_23.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_24.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_25.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_26.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_27.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_28.mp4'},
      {'movie_name': 'stimuli/Kids_Jack_29.mp4'},
      {'movie_name': 'stimuli/P01.mp4'},
      {'movie_name': 'stimuli/P02s.mp4'},
      {'movie_name': 'stimuli/P03.mp4'},
      {'movie_name': 'stimuli/P04.mp4'},
      {'movie_name': 'stimuli/P05.mp4'},
      {'movie_name': 'stimuli/P06.mp4'}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
    Routine fixation
    Routine trial_movie
    Routine wait
  LoopTerminator trials
  Routine calibration
  Routine thanks
